PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop
  keyboardBackend = ioHub
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Routines
  Routine firstInstructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Umieść środkowy i wskazujący palec lewej ręki na klawiszach „z” i „x” oraz środkowy i wskazujący palec prawej ręki na klawiszach „n” i „m”.
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    KeyboardComponent keyResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine secondInstructions
    TextComponent instrText_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = W zadaniu, które za chwilę wykonasz, na ekranie pojawiać się będą słowa. Słowa będą przedstawione w jednym z czterech kolorów:żółtym, niebieskim, zielonym, czerwonym.Twoim  zadaniem jest wskazanie koloru czcionki, ignorując przy tym znaczenie słowa poprzez naciśnięcie odpowiedniego klawisza na klawiaturze, odpowiadającemu danemu kolorowi:●„z” dla koloru niebieskiego●„x” dla koloru zielonego●„n” dla koloru żółtego●„m” dla koloru czerwonego Postaraj się odpowiadać poprawnie i jak najszybciej, gdyż mierzony będzie czas Twojej reakcji. Zanim rozpocznie się sesja  eksperymentalna  zostaniesz poddany sesji treningowej, która ułatwi ci zrozumienie zadania i nabranie wprawy.Podczas sesji treningowej będziesz informowany o poprawności zaznaczonej odpowiedzi komunikatem “DOBRZE” lub “ŹLE”.
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    KeyboardComponent keyResp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine secondTrial
    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $badWords
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    KeyboardComponent key_resp
      allowedKeys = 'z','x','n','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
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  Routine firstTrial
    TextComponent textStroopWord
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $neutralWords
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    KeyboardComponent response
      allowedKeys = 'z','x','n','m'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      storeCorrect = True
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  Routine breakPicture
    ImageComponent image
      image = C:/Users/tomek/Downloads/PsychoPy_skeleton-main (1)/PsychoPy_skeleton-main/images/break.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine firstInstructions
  Routine secondInstructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'badWords': 'Złość', 'neutralWords': 'Gość', 'colour': 'red'},
      {'badWords': 'Gwałt', 'neutralWords': 'Skaut', 'colour': 'green'},
      {'badWords': 'Mrok', 'neutralWords': 'Skok', 'colour': 'blue'},
      {'badWords': 'Śmierć', 'neutralWords': 'Pięć', 'colour': 'yellow'},
      {'badWords': 'Węże', 'neutralWords': 'Jeże', 'colour': None},
      {'badWords': 'Maczeta', 'neutralWords': 'Skarpeta', 'colour': None},
      {'badWords': 'Więzienie', 'neutralWords': 'Schronienie', 'colour': None},
      {'badWords': 'Choroba', 'neutralWords': 'Gospoda', 'colour': None},
      {'badWords': 'Amputacja', 'neutralWords': 'Kreacja', 'colour': None},
      {'badWords': 'Psychoza', 'neutralWords': 'Glukoza', 'colour': None},
      {'badWords': 'Zabijanie', 'neutralWords': 'Podjadanie', 'colour': None},
      {'badWords': 'Bieda', 'neutralWords': 'Dieta', 'colour': None},
      {'badWords': 'Brud', 'neutralWords': 'Klub', 'colour': None},
      {'badWords': 'Krew', 'neutralWords': 'Brew', 'colour': None},
      {'badWords': 'Molestowanie', 'neutralWords': 'Bieganie', 'colour': None},
      {'badWords': 'Pedofil', 'neutralWords': 'Profil', 'colour': None},
      {'badWords': 'Przemoc', 'neutralWords': 'Równonoc', 'colour': None},
      {'badWords': 'Terroryzm', 'neutralWords': 'Behawioryzm', 'colour': None},
      {'badWords': 'Bić', 'neutralWords': 'Nić', 'colour': None},
      {'badWords': 'Wojna', 'neutralWords': 'Wolna', 'colour': None}]
    Routine firstTrial
  LoopTerminator trials
  Routine breakPicture
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'badWords': 'Złość', 'neutralWords': 'Gość', 'colour': 'red'},
      {'badWords': 'Gwałt', 'neutralWords': 'Skaut', 'colour': 'green'},
      {'badWords': 'Mrok', 'neutralWords': 'Skok', 'colour': 'blue'},
      {'badWords': 'Śmierć', 'neutralWords': 'Pięć', 'colour': 'yellow'},
      {'badWords': 'Węże', 'neutralWords': 'Jeże', 'colour': 'red'},
      {'badWords': 'Maczeta', 'neutralWords': 'Skarpeta', 'colour': 'green'},
      {'badWords': 'Więzienie', 'neutralWords': 'Schronienie', 'colour': 'blue'},
      {'badWords': 'Choroba', 'neutralWords': 'Gospoda', 'colour': 'yellow'},
      {'badWords': 'Amputacja', 'neutralWords': 'Kreacja', 'colour': 'red'},
      {'badWords': 'Psychoza', 'neutralWords': 'Glukoza', 'colour': 'green'},
      {'badWords': 'Zabijanie', 'neutralWords': 'Podjadanie', 'colour': 'blue'},
      {'badWords': 'Bieda', 'neutralWords': 'Dieta', 'colour': 'yellow'},
      {'badWords': 'Brud', 'neutralWords': 'Klub', 'colour': 'red'},
      {'badWords': 'Krew', 'neutralWords': 'Brew', 'colour': 'green'},
      {'badWords': 'Molestowanie', 'neutralWords': 'Bieganie', 'colour': 'blue'},
      {'badWords': 'Pedofil', 'neutralWords': 'Profil', 'colour': 'yellow'},
      {'badWords': 'Przemoc', 'neutralWords': 'Równonoc', 'colour': 'red'},
      {'badWords': 'Terroryzm', 'neutralWords': 'Behawioryzm', 'colour': 'green'},
      {'badWords': 'Bić', 'neutralWords': 'Nić', 'colour': 'blue'},
      {'badWords': 'Wojna', 'neutralWords': 'Wolna', 'colour': 'yellow'}]
    Routine secondTrial
  LoopTerminator trials_2
